PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  color = white
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1280, 800]
  Full-screen window = False
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = Artificial_language_learning
  Screen = 1
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Routines
  Routine end
    TextComponent text_2
      wrapWidth = 1.8
      color = black
      text = Check the results file in the data sub folder
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions2
    TextComponent inst2
      wrapWidth = 1.8
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        ﻿
        As part of your training, you will see a series of pictures and the word the alien would use to describe those pictures. After being shown a picture and the word, you will be asked to retype the word you just saw.

        Once your training is complete, the alien will test you on how well you have learnt the language, this will be done by only showing you the picture and you have to type in the word you think the alien uses to describe it.


        press SPACE to continue.
    KeyboardComponent cont2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine train_display
    ImageComponent image_train1
      stopVal [duration (s)] = 6
      pos = (0, 200)
      units = pix
      startVal [time (s)] = 1.5
      image [set every repeat] = $img_train
      size = (300, 300)
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    TextComponent label_train1
      color = black
      text [set every repeat] = $label1
      stopVal [duration (s)] = 4.5
      pos = (0, -0.2)
      startVal [time (s)] = 3
      letterHeight = 0.1
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    TextComponent text_3
      color = black
      text [set every repeat] = $label1
      stopVal [duration (s)] = 1.5
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine train_input
    CodeComponent code
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        retype1.alignHoriz ='left'
      End Routine:
        # let's store the final text string into the results finle...
        thisExp.addData('inputText', inputText)
        inputText=""
      Each Frame:
        n= len(theseKeys)
        i = 0
        while i < n:

            if theseKeys[i] == 'return':
                # pressing RETURN means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1]  # lose the final character
                i = i + 1

            elif theseKeys[i] == 'space':
                inputText += ' '
                i = i + 1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1

            else:
                if len(theseKeys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]

                i = i + 1
    TextComponent retype1
      color = black
      text [set every frame] = $(inputText)
      pos = [-0.1, -0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      correctAns = $label1
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instr3
      wrapWidth = 1.8
      color = black
      text = Please retype the word you just saw and press ENTER
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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  Routine test_instructions
    TextComponent instr4
      wrapWidth = 1.8
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        You will now only be shown the image and your task is to type the word you think went with that image.

        Always type a word you think could be part of the language, never leave it blank.

        Press SPACE to continue
    KeyboardComponent cont3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test_input
    CodeComponent code_2
      Begin Experiment:
        testText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        retype_test.alignHoriz ='left'
      End Routine:
        # let's store the final text string into the results finle...
        thisExp.addData('testText', testText)
        testText=""
      Each Frame:
        n= len(theseKeys)
        i = 0
        while i < n:

            if theseKeys[i] == 'return':
                # pressing RETURN means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'backspace':
                testText = testText[:-1]  # lose the final character
                i = i + 1

            elif theseKeys[i] == 'space':
                testText += ' '
                i = i + 1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1

            else:
                if len(theseKeys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        testText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        testText += theseKeys[i]

                i = i + 1
    TextComponent retype_test
      color = black
      text [set every frame] = $(testText)
      pos = [-0.1, -0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent img_test1
      pos = (0, 200)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $img_test
      size = (300, 300)
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    KeyboardComponent key_resp_6
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text
      wrapWidth = 1.8
      color = black
      text = Type the word you think described this image
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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  Routine fixation1
    TextComponent fix1
      color = black
      stopVal [duration (s)] = 0.5
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine fixation2
    TextComponent fix2
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instuctions
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent instr1
      wrapWidth = 1.8
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        ﻿
        Welcome to the planet Alpha-3-6a in a galaxy far, far away. We have encountered an intelligent alien life form with its own form of language. You must try to learn this language as best you can.

        Don’t worry if you feel overwhelmed—the alien knows that this is a difficult task for you to master, and it will do its best to understand everything that you say.


        press SPACE to continue.
    KeyboardComponent cont1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instuctions
  Routine instructions2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Train/Trials_list.csv
    loopType = random
    nReps = 4
    Selected rows = 0:1
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    conditions:
      [{'label1': u'lenoga', 'Freq1': u'high', 'img_train': u'Stims/p0.bmp'},
      {'label1': u'lenoga', 'Freq1': u'high', 'img_train': u'Stims/p0.bmp'},
      {'label1': u'lenoga', 'Freq1': u'high', 'img_train': u'Stims/p0.bmp'},
      {'label1': u'lenoga', 'Freq1': u'high', 'img_train': u'Stims/p0.bmp'},
      {'label1': u'kilonu', 'Freq1': u'high', 'img_train': u'Stims/p1.bmp'},
      {'label1': u'kilonu', 'Freq1': u'high', 'img_train': u'Stims/p1.bmp'},
      {'label1': u'kilonu', 'Freq1': u'high', 'img_train': u'Stims/p1.bmp'},
      {'label1': u'kilonu', 'Freq1': u'high', 'img_train': u'Stims/p1.bmp'},
      {'label1': u'gahemi', 'Freq1': u'high', 'img_train': u'Stims/p2.bmp'},
      {'label1': u'gahemi', 'Freq1': u'high', 'img_train': u'Stims/p2.bmp'},
      {'label1': u'gahemi', 'Freq1': u'high', 'img_train': u'Stims/p2.bmp'},
      {'label1': u'gahemi', 'Freq1': u'high', 'img_train': u'Stims/p2.bmp'},
      {'label1': u'nowahi', 'Freq1': u'high', 'img_train': u'Stims/p3.bmp'},
      {'label1': u'nowahi', 'Freq1': u'high', 'img_train': u'Stims/p3.bmp'},
      {'label1': u'nowahi', 'Freq1': u'high', 'img_train': u'Stims/p3.bmp'},
      {'label1': u'nowahi', 'Freq1': u'high', 'img_train': u'Stims/p3.bmp'},
      {'label1': u'mipuwe', 'Freq1': u'high', 'img_train': u'Stims/p4.bmp'},
      {'label1': u'mipuwe', 'Freq1': u'high', 'img_train': u'Stims/p4.bmp'},
      {'label1': u'hekipo', 'Freq1': u'med', 'img_train': u'Stims/p5.bmp'},
      {'label1': u'hekipo', 'Freq1': u'med', 'img_train': u'Stims/p5.bmp'},
      {'label1': u'gulika', 'Freq1': u'med', 'img_train': u'Stims/p6.bmp'}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
    Routine train_display
    Routine train_input
    Routine fixation1
  LoopTerminator trials
  Routine test_instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Train/Test_list.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'label1': u'lenoga', 'img_test': u'Stims/p0.bmp', 'Freq1': u'high'},
      {'label1': u'kilonu', 'img_test': u'Stims/p1.bmp', 'Freq1': u'high'},
      {'label1': u'gahemi', 'img_test': u'Stims/p2.bmp', 'Freq1': u'high'},
      {'label1': u'nowahi', 'img_test': u'Stims/p3.bmp', 'Freq1': u'high'},
      {'label1': u'mipuwe', 'img_test': u'Stims/p4.bmp', 'Freq1': u'med'},
      {'label1': u'hekipo', 'img_test': u'Stims/p5.bmp', 'Freq1': u'med'},
      {'label1': u'gulika', 'img_test': u'Stims/p6.bmp', 'Freq1': u'med'},
      {'label1': u'howine', 'img_test': u'Stims/p7.bmp', 'Freq1': u'med'},
      {'label1': u'womeku', 'img_test': u'Stims/p8.bmp', 'Freq1': u'low'},
      {'label1': u'lamupo', 'img_test': u'Stims/p9.bmp', 'Freq1': u'low'},
      {'label1': u'kugowi', 'img_test': u'Stims/pp1.bmp', 'Freq1': u'low'},
      {'label1': u'pigalo', 'img_test': u'Stims/pp2.bmp', 'Freq1': u'low'}]
    Routine test_input
    Routine fixation2
  LoopTerminator trials_2
  Routine end
